<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="usbhid_generic" tag="keyboard" usage_page="1" usage="6" log_all_input_values="NO">
            <iochannel type="usbhid_generic_input_channel" tag="spacebar_channel" usage_page="7" usage="44" value="spacebar_pressed"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="spacebar_pressed" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="report" tag="Report" message="spacebar_pressed = $spacebar_pressed"></action>
        </variable>
        <variable tag="done" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli"></stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Begin State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action type="report" tag="Announce Begin State System" message="State system beginning"></action>
                    <action type="assignment" tag="Reset done" variable="done" value="0"></action>
                    <action tag="Start IO Device" type="start_device_IO" device="keyboard"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="done" target="Exit State System"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action tag="Stop IO Device" type="stop_device_IO" device="keyboard"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>